---
API: 2
OpenSesame: 3.0.0a10
Platform: posix
---
set width 1024
set uniform_coordinates "yes"
set title "Tutorial: Gaze cuing"
set synth_backend "legacy"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "legacy"
set keyboard_backend "legacy"
set height 768
set foreground "black"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "relative"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "legacy"
set bidi "no"
set background "white"

define loop block_loop
	set skip 0
	set repeat 3
	set order "random"
	set offset "no"
	set item "trial_sequence"
	set description "Repeatedly runs another item"
	set cycles 8
	set column_order "target_pos;gaze_cue;target_letter;dist_pos;correct_response;congruency"
	set break_if "never"
	setcycle 0 dist_pos "300"
	setcycle 0 target_letter "F"
	setcycle 0 correct_response "z"
	setcycle 0 target_pos "-300"
	setcycle 0 congruency "congruent"
	setcycle 0 gaze_cue "left"
	setcycle 1 dist_pos "300"
	setcycle 1 target_letter "H"
	setcycle 1 correct_response "m"
	setcycle 1 target_pos "-300"
	setcycle 1 congruency "congruent"
	setcycle 1 gaze_cue "left"
	setcycle 2 dist_pos "300"
	setcycle 2 target_letter "F"
	setcycle 2 correct_response "z"
	setcycle 2 target_pos "-300"
	setcycle 2 congruency "incongruent"
	setcycle 2 gaze_cue "right"
	setcycle 3 dist_pos "300"
	setcycle 3 target_letter "H"
	setcycle 3 correct_response "m"
	setcycle 3 target_pos "-300"
	setcycle 3 congruency "incongruent"
	setcycle 3 gaze_cue "right"
	setcycle 4 dist_pos "-300"
	setcycle 4 target_letter "F"
	setcycle 4 correct_response "z"
	setcycle 4 target_pos "300"
	setcycle 4 congruency "incongruent"
	setcycle 4 gaze_cue "left"
	setcycle 5 dist_pos "-300"
	setcycle 5 target_letter "H"
	setcycle 5 correct_response "m"
	setcycle 5 target_pos "300"
	setcycle 5 congruency "incongruent"
	setcycle 5 gaze_cue "left"
	setcycle 6 dist_pos "-300"
	setcycle 6 target_letter "F"
	setcycle 6 correct_response "S"
	setcycle 6 target_pos "300"
	setcycle 6 congruency "congruent"
	setcycle 6 gaze_cue "right"
	setcycle 7 dist_pos "-300"
	setcycle 7 target_letter "H"
	setcycle 7 correct_response "m"
	setcycle 7 target_pos "300"
	setcycle 7 congruency "congruent"
	setcycle 7 gaze_cue "right"
	run trial_sequence

define sequence block_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run reset_feedback "always"
	run block_loop "always"
	run feedback "always"

define form_text_display end_of_experiment
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run instructions "always"
	run practice_loop "always"
	run end_of_practice "always"
	run experimental_loop "always"
	run end_of_experiment "always"

define loop experimental_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "block_sequence"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run block_sequence

define feedback feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of block<br /><br />Your average response time was [avg_rt] ms<br />Your accuracy was [acc] %<br /><br />Press any key to continue<br />" x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define notepad getting_started
	__note__
	Hi,
	Welcome to OpenSesame 3.0.0 "Interactive Ising"!
	If you are new to OpenSesame, you may wish to follow one of the tutorials,
	which can be found online. There are also many example experiments, which will
	help you to get started with creating your own. These can be found in the
	"examples" folder provided with OpenSesame or, again, online.
	For more information, please refer to OpenSesame documentation area:
	- <http://osdoc.cogsci.nl/>
	And feel free to ask for help on the forum:
	- <http://forum.cogsci.nl/>
	Have fun with OpenSesame!
	--
	Sebastiaan
	__end__
	set description "Some pointers to help you get started!"

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "sound"
	set description "Plays a sound file in .wav or .ogg format"

define form_text_display instructions
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 2000
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log "yes"

define sketchpad neutral_gaze
	set duration 745
	set description "Displays stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define loop practice_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "block_sequence"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[target_letter]" x="[target_pos]" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x="[dist_pos]" y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot "always"
	run neutral_gaze "always"
	run gaze_cue "always"
	run target "always"
	run keyboard_response "always"
	run incorrect_sound "[correct] = 0"
	run logger "always"

define sketchpad welcome
	set start_response_interval "no"
	set reset_variables "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.0.0 <i>Interactive Ising</i>" x=0 y=0 z_index=0

