---
API: 2.1
OpenSesame: 3.3.0a69
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Student Number Input for OSWeb"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/Documents/Research/Projects/P0064 [Research practicum 2019 - 2020]/memory load and color categories/osweb-version"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#282828"

define inline_javascript constants
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.block_count = 0
	vars.student_number = ''
	vars.response = ''
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run constants always
	run get_student_number_loop always
	run verify_student_number always

define loop get_student_number_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_student_number_sequence

define sequence get_student_number_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run show_student_number always
	run number_input always
	run process_number_input always

define keyboard_response number_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;0;return;backspace"

define inline_javascript process_number_input
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response in [0, 1, 2, 3, 4, 5, 6, 7, 8, 9]) {
		vars.student_number += vars.response.toString()
	} else if (vars.response === 'backspace') {
		vars.student_number = vars.student_number.toString().slice(0, vars.student_number.toString().length - 1)
	}
	__end__
	set _prepare ""

define sketchpad show_student_number
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Enter your student number<br /><br />Press 'return' to accept<br /><br />S[student_number]" x=0 y=0 z_index=0

define feedback verify_student_number
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Your student number is S[student_number]<br /><br />If this is correct, press any key to start the experiment<br /><br />If this is incorrect, abort the experiment and run it again" x=0 y=0 z_index=0

