---
API: 3
OpenSesame: 4.1.17
Platform: posix
---
set width 1024
set title "AX-CPT"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "e77d359e-76d1-4023-b352-2e8cf3d7cbab"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/sebastiaan/git/osdoc/static/attachments/sigmund"
set disable_garbage_collection False
set description "This experiment was auto-generated by SigmundAI"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define feedback block_feedback
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Block finished!<br /><br />Accuracy: {acc}%<br />Average RT: {avg_rt} ms<br /><br />Press SPACE to continue." x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set item block_sequence
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set column_order block
	set break_if_on_first yes
	set break_if never
	setcycle 0 block 1
	setcycle 1 block 2
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback True
	run trial_loop True
	run block_feedback "block == 1"
	run break_screen True

define sketchpad break_screen
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Take a short break.<br /><br />Press SPACE when you are ready to continue to the next block." x=0 y=0 z_index=0

define sketchpad cue_display
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=True text="{cue_type}" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run task_description True
	run welcome True
	run instructions True
	run practice_loop True
	run practice_to_main_transition True
	run block_loop True
	run goodbye True

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad fixation_500
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Thank you for participating!<br /><br />Press SPACE to exit." x=0 y=0 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="On each trial you will first see a CUE letter, and shortly after a PROBE letter.<br /><br />- If the cue is 'A' and the probe is 'X', press the LEFT arrow key.<br />- For any other combination (AY, BX, BY), press the RIGHT arrow key.<br /><br />Example: A then X --&gt; press LEFT<br />Example: A then Y --&gt; press RIGHT<br />Example: B then X --&gt; press RIGHT<br />Example: B then Y --&gt; press RIGHT<br /><br />Please respond as quickly and accurately as possible.<br /><br />Press SPACE to start a practice block." x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define feedback practice_feedback
	set reset_variables no
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color="{'green' if correct == 1 else 'red'}" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="{'Correct!' if correct == 1 else 'Incorrect! Correct response: ' + correct_response}" x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item practice_trial_sequence
	set description "Repeatedly runs another item"
	set cycles 40
	set continuous no
	set column_order "cue_type;probe_type;trial_type;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type A
	setcycle 0 probe_type X
	setcycle 0 trial_type AX
	setcycle 0 correct_response left
	setcycle 1 cue_type A
	setcycle 1 probe_type X
	setcycle 1 trial_type AX
	setcycle 1 correct_response left
	setcycle 2 cue_type A
	setcycle 2 probe_type X
	setcycle 2 trial_type AX
	setcycle 2 correct_response left
	setcycle 3 cue_type A
	setcycle 3 probe_type X
	setcycle 3 trial_type AX
	setcycle 3 correct_response left
	setcycle 4 cue_type A
	setcycle 4 probe_type X
	setcycle 4 trial_type AX
	setcycle 4 correct_response left
	setcycle 5 cue_type A
	setcycle 5 probe_type X
	setcycle 5 trial_type AX
	setcycle 5 correct_response left
	setcycle 6 cue_type A
	setcycle 6 probe_type X
	setcycle 6 trial_type AX
	setcycle 6 correct_response left
	setcycle 7 cue_type A
	setcycle 7 probe_type X
	setcycle 7 trial_type AX
	setcycle 7 correct_response left
	setcycle 8 cue_type A
	setcycle 8 probe_type X
	setcycle 8 trial_type AX
	setcycle 8 correct_response left
	setcycle 9 cue_type A
	setcycle 9 probe_type X
	setcycle 9 trial_type AX
	setcycle 9 correct_response left
	setcycle 10 cue_type A
	setcycle 10 probe_type Y
	setcycle 10 trial_type AY
	setcycle 10 correct_response right
	setcycle 11 cue_type A
	setcycle 11 probe_type Y
	setcycle 11 trial_type AY
	setcycle 11 correct_response right
	setcycle 12 cue_type A
	setcycle 12 probe_type Y
	setcycle 12 trial_type AY
	setcycle 12 correct_response right
	setcycle 13 cue_type A
	setcycle 13 probe_type Y
	setcycle 13 trial_type AY
	setcycle 13 correct_response right
	setcycle 14 cue_type A
	setcycle 14 probe_type Y
	setcycle 14 trial_type AY
	setcycle 14 correct_response right
	setcycle 15 cue_type A
	setcycle 15 probe_type Y
	setcycle 15 trial_type AY
	setcycle 15 correct_response right
	setcycle 16 cue_type A
	setcycle 16 probe_type Y
	setcycle 16 trial_type AY
	setcycle 16 correct_response right
	setcycle 17 cue_type A
	setcycle 17 probe_type Y
	setcycle 17 trial_type AY
	setcycle 17 correct_response right
	setcycle 18 cue_type A
	setcycle 18 probe_type Y
	setcycle 18 trial_type AY
	setcycle 18 correct_response right
	setcycle 19 cue_type A
	setcycle 19 probe_type Y
	setcycle 19 trial_type AY
	setcycle 19 correct_response right
	setcycle 20 cue_type B
	setcycle 20 probe_type X
	setcycle 20 trial_type BX
	setcycle 20 correct_response right
	setcycle 21 cue_type B
	setcycle 21 probe_type X
	setcycle 21 trial_type BX
	setcycle 21 correct_response right
	setcycle 22 cue_type B
	setcycle 22 probe_type X
	setcycle 22 trial_type BX
	setcycle 22 correct_response right
	setcycle 23 cue_type B
	setcycle 23 probe_type X
	setcycle 23 trial_type BX
	setcycle 23 correct_response right
	setcycle 24 cue_type B
	setcycle 24 probe_type X
	setcycle 24 trial_type BX
	setcycle 24 correct_response right
	setcycle 25 cue_type B
	setcycle 25 probe_type X
	setcycle 25 trial_type BX
	setcycle 25 correct_response right
	setcycle 26 cue_type B
	setcycle 26 probe_type X
	setcycle 26 trial_type BX
	setcycle 26 correct_response right
	setcycle 27 cue_type B
	setcycle 27 probe_type X
	setcycle 27 trial_type BX
	setcycle 27 correct_response right
	setcycle 28 cue_type B
	setcycle 28 probe_type X
	setcycle 28 trial_type BX
	setcycle 28 correct_response right
	setcycle 29 cue_type B
	setcycle 29 probe_type X
	setcycle 29 trial_type BX
	setcycle 29 correct_response right
	setcycle 30 cue_type B
	setcycle 30 probe_type Y
	setcycle 30 trial_type BY
	setcycle 30 correct_response right
	setcycle 31 cue_type B
	setcycle 31 probe_type Y
	setcycle 31 trial_type BY
	setcycle 31 correct_response right
	setcycle 32 cue_type B
	setcycle 32 probe_type Y
	setcycle 32 trial_type BY
	setcycle 32 correct_response right
	setcycle 33 cue_type B
	setcycle 33 probe_type Y
	setcycle 33 trial_type BY
	setcycle 33 correct_response right
	setcycle 34 cue_type B
	setcycle 34 probe_type Y
	setcycle 34 trial_type BY
	setcycle 34 correct_response right
	setcycle 35 cue_type B
	setcycle 35 probe_type Y
	setcycle 35 trial_type BY
	setcycle 35 correct_response right
	setcycle 36 cue_type B
	setcycle 36 probe_type Y
	setcycle 36 trial_type BY
	setcycle 36 correct_response right
	setcycle 37 cue_type B
	setcycle 37 probe_type Y
	setcycle 37 trial_type BY
	setcycle 37 correct_response right
	setcycle 38 cue_type B
	setcycle 38 probe_type Y
	setcycle 38 trial_type BY
	setcycle 38 correct_response right
	setcycle 39 cue_type B
	setcycle 39 probe_type Y
	setcycle 39 trial_type BY
	setcycle 39 correct_response right
	run practice_trial_sequence

define sketchpad practice_to_main_transition
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Practice complete!<br /><br />The main experiment will now begin.<br />Remember: LEFT for A-X, RIGHT for anything else.<br /><br />Press SPACE to continue." x=0 y=0 z_index=0

define sequence practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation True
	run cue_display True
	run fixation_500 True
	run probe_display True
	run probe_response True
	run practice_feedback True
	run fixation_500 True
	run logger True

define sketchpad probe_display
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=True text="{probe_type}" x=0 y=0 z_index=0

define keyboard_response probe_response
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "{correct_response}"
	set allowed_responses "left;right"

define reset_feedback reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define notepad task_description
	set description "Full narrative description of the AX-CPT task. Documentation only, not part of the run sequence. See persistent notes for the complete text."

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set column_order "cue_type;probe_type;trial_type;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type A
	setcycle 0 probe_type X
	setcycle 0 trial_type AX
	setcycle 0 correct_response left
	setcycle 1 cue_type A
	setcycle 1 probe_type X
	setcycle 1 trial_type AX
	setcycle 1 correct_response left
	setcycle 2 cue_type A
	setcycle 2 probe_type X
	setcycle 2 trial_type AX
	setcycle 2 correct_response left
	setcycle 3 cue_type A
	setcycle 3 probe_type X
	setcycle 3 trial_type AX
	setcycle 3 correct_response left
	setcycle 4 cue_type A
	setcycle 4 probe_type X
	setcycle 4 trial_type AX
	setcycle 4 correct_response left
	setcycle 5 cue_type A
	setcycle 5 probe_type X
	setcycle 5 trial_type AX
	setcycle 5 correct_response left
	setcycle 6 cue_type A
	setcycle 6 probe_type X
	setcycle 6 trial_type AX
	setcycle 6 correct_response left
	setcycle 7 cue_type A
	setcycle 7 probe_type X
	setcycle 7 trial_type AX
	setcycle 7 correct_response left
	setcycle 8 cue_type A
	setcycle 8 probe_type X
	setcycle 8 trial_type AX
	setcycle 8 correct_response left
	setcycle 9 cue_type A
	setcycle 9 probe_type X
	setcycle 9 trial_type AX
	setcycle 9 correct_response left
	setcycle 10 cue_type A
	setcycle 10 probe_type X
	setcycle 10 trial_type AX
	setcycle 10 correct_response left
	setcycle 11 cue_type A
	setcycle 11 probe_type X
	setcycle 11 trial_type AX
	setcycle 11 correct_response left
	setcycle 12 cue_type A
	setcycle 12 probe_type X
	setcycle 12 trial_type AX
	setcycle 12 correct_response left
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	setcycle 56 cue_type A
	setcycle 56 probe_type Y
	setcycle 56 trial_type AY
	setcycle 56 correct_response right
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	setcycle 64 cue_type B
	setcycle 64 probe_type X
	setcycle 64 trial_type BX
	setcycle 64 correct_response right
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	setcycle 72 cue_type B
	setcycle 72 probe_type Y
	setcycle 72 trial_type BY
	setcycle 72 correct_response right
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	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation True
	run cue_display True
	run fixation_500 True
	run probe_display True
	run probe_response True
	run fixation_500 True
	run logger True

define sketchpad welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Welcome to this experiment!<br /><br />You will see pairs of letters on the screen.<br /><br />Press SPACE to continue." x=0 y=0 z_index=0

