---
API: 3
OpenSesame: 4.1.17
Platform: posix
---
set width 1024
set upscale_display no
set uniform_coordinates yes
set transparent_window no
set title "Posner Cueing Experiment"
set tab_consistent yes
set synth_backend psycho
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set show_annotations no
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "9b8ad056-1886-8d63-8fa2-aa6fdb6fb066"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/sebastiaan/git/osdoc/static/attachments/sigmund"
set disable_garbage_collection False
set description "This experiment was auto-generated by SigmundAI"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set bidi no
set background "#3d3846"

define feedback block_end
	set reset_variables yes
	set duration keypress
	set description "Displays block accuracy and mean response time"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Block {block_nr} of 2 complete!" x=0 y=-80 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Accuracy: {acc}%<br />Average RT: {avg_rt} ms" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Press any key to continue." x=0 y=100 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set item block_sequence
	set description "Two experimental blocks of 80 trials each"
	set cycles 2
	set continuous no
	set column_order block_nr
	set break_if_on_first yes
	set break_if never
	setcycle 0 block_nr 1
	setcycle 1 block_nr 2
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A single block: reset feedback, run trials, show block summary"
	run reset_feedback True
	run trial_loop True
	run block_end True

define sketchpad cue
	set duration 200
	set description "Displays a central arrow cue that replaces the fixation dot"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="cue_direction == 'left'" text="←" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="cue_direction == 'right'" text="→" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run getting_started True
	run welcome True
	run instructions True
	run practice_loop True
	run practice_end True
	run block_loop True
	run goodbye True

define feedback feedback
	set reset_variables yes
	set duration 500
	set description "Displays feedback based on the response to the target letter"
	draw textline center=1 color=green font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="correct == 1" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="correct == 0 and response != None" text="−" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="response == None" text="!" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays a central fixation dot"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define notepad getting_started
	__notes__
	Posner cuing paradigm with central cue and letter discrimination.
	Participants see a central fixation dot, then a directional arrow cue
	(left or right), then after an ISI a target letter (X or O) appears
	to the left or right of fixation. The cue correctly predicts the
	target side on 80% of trials (valid) and incorrectly on 20% (invalid).
	Participants respond with 'f' for X and 'j' for O, regardless of
	location. Feedback (+, -, !) is shown after every response. The
	experiment has a practice phase (20 trials) followed by 2 blocks of
	80 trials each (160 total), with a summary screen between blocks.
	__end__
	set note ""
	set description "A simple notepad to document your experiment. This plugin does nothing."

define sketchpad goodbye
	set duration keypress
	set description "Thank-you message"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=True text="Thank you for participating!" x=0 y=-50 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Press any key to exit" x=0 y=50 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays task instructions"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="In this task you will see an arrow pointing left or right.<br /><br />This arrow usually (but not always) predicts where a letter will appear.<br /><br />Your job is to respond to the LETTER, not the location:<br />Press 'f' if the letter is X<br />Press 'j' if the letter is O<br /><br />Please respond as quickly and accurately as possible.<br /><br />Press any key to start the practice phase." x=0 y=0 z_index=0

define sketchpad isi
	set duration 400
	set description "Displays the fixation dot again during the cue-target interval"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define sketchpad iti
	set duration 1000
	set description "Blank inter-trial interval"

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects a keyboard response to the target letter"
	set allowed_responses "f;j"

define logger logger
	set description "Logs all variables of interest"
	set auto_log yes

define sketchpad practice_end
	set duration keypress
	set description "Informs the participant that practice is over"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Practice complete!" x=0 y=-50 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="The main experiment will now begin.<br /><br />Press any key to continue." x=0 y=50 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item trial_sequence
	set description "Practice phase: 20 trials, 80% valid, 20% invalid"
	set cycles 20
	set continuous no
	set column_order "cue_direction;target_letter;validity;target_side;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response f
	setcycle 0 cue_direction left
	setcycle 0 target_letter X
	setcycle 0 target_side left
	setcycle 0 validity valid
	setcycle 1 correct_response f
	setcycle 1 cue_direction left
	setcycle 1 target_letter X
	setcycle 1 target_side left
	setcycle 1 validity valid
	setcycle 2 correct_response f
	setcycle 2 cue_direction left
	setcycle 2 target_letter X
	setcycle 2 target_side left
	setcycle 2 validity valid
	setcycle 3 correct_response f
	setcycle 3 cue_direction left
	setcycle 3 target_letter X
	setcycle 3 target_side left
	setcycle 3 validity valid
	setcycle 4 correct_response j
	setcycle 4 cue_direction left
	setcycle 4 target_letter O
	setcycle 4 target_side left
	setcycle 4 validity valid
	setcycle 5 correct_response j
	setcycle 5 cue_direction left
	setcycle 5 target_letter O
	setcycle 5 target_side left
	setcycle 5 validity valid
	setcycle 6 correct_response j
	setcycle 6 cue_direction left
	setcycle 6 target_letter O
	setcycle 6 target_side left
	setcycle 6 validity valid
	setcycle 7 correct_response j
	setcycle 7 cue_direction left
	setcycle 7 target_letter O
	setcycle 7 target_side left
	setcycle 7 validity valid
	setcycle 8 correct_response f
	setcycle 8 cue_direction right
	setcycle 8 target_letter X
	setcycle 8 target_side right
	setcycle 8 validity valid
	setcycle 9 correct_response f
	setcycle 9 cue_direction right
	setcycle 9 target_letter X
	setcycle 9 target_side right
	setcycle 9 validity valid
	setcycle 10 correct_response f
	setcycle 10 cue_direction right
	setcycle 10 target_letter X
	setcycle 10 target_side right
	setcycle 10 validity valid
	setcycle 11 correct_response f
	setcycle 11 cue_direction right
	setcycle 11 target_letter X
	setcycle 11 target_side right
	setcycle 11 validity valid
	setcycle 12 correct_response j
	setcycle 12 cue_direction right
	setcycle 12 target_letter O
	setcycle 12 target_side right
	setcycle 12 validity valid
	setcycle 13 correct_response j
	setcycle 13 cue_direction right
	setcycle 13 target_letter O
	setcycle 13 target_side right
	setcycle 13 validity valid
	setcycle 14 correct_response j
	setcycle 14 cue_direction right
	setcycle 14 target_letter O
	setcycle 14 target_side right
	setcycle 14 validity valid
	setcycle 15 correct_response j
	setcycle 15 cue_direction right
	setcycle 15 target_letter O
	setcycle 15 target_side right
	setcycle 15 validity valid
	setcycle 16 correct_response f
	setcycle 16 cue_direction left
	setcycle 16 target_letter X
	setcycle 16 target_side right
	setcycle 16 validity invalid
	setcycle 17 correct_response j
	setcycle 17 cue_direction left
	setcycle 17 target_letter O
	setcycle 17 target_side right
	setcycle 17 validity invalid
	setcycle 18 correct_response f
	setcycle 18 cue_direction right
	setcycle 18 target_letter X
	setcycle 18 target_side left
	setcycle 18 validity invalid
	setcycle 19 correct_response j
	setcycle 19 cue_direction right
	setcycle 19 target_letter O
	setcycle 19 target_side left
	setcycle 19 validity invalid
	run trial_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as accuracy and average response time, that are used by feedback items"

define sketchpad target_display
	set duration 0
	set description "Displays the target letter to the left or right of fixation, with the fixation dot still visible, until a response is given"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="target_side == 'left'" text="{target_letter}" x=-300 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="target_side == 'right'" text="{target_letter}" x=300 y=0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item trial_sequence
	set description "80 experimental trials per block, 80% valid, 20% invalid"
	set cycles 80
	set continuous no
	set column_order "cue_direction;target_letter;validity;target_side;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response f
	setcycle 0 cue_direction left
	setcycle 0 target_letter X
	setcycle 0 target_side left
	setcycle 0 validity valid
	setcycle 1 correct_response f
	setcycle 1 cue_direction left
	setcycle 1 target_letter X
	setcycle 1 target_side left
	setcycle 1 validity valid
	setcycle 2 correct_response f
	setcycle 2 cue_direction left
	setcycle 2 target_letter X
	setcycle 2 target_side left
	setcycle 2 validity valid
	setcycle 3 correct_response f
	setcycle 3 cue_direction left
	setcycle 3 target_letter X
	setcycle 3 target_side left
	setcycle 3 validity valid
	setcycle 4 correct_response f
	setcycle 4 cue_direction left
	setcycle 4 target_letter X
	setcycle 4 target_side left
	setcycle 4 validity valid
	setcycle 5 correct_response f
	setcycle 5 cue_direction left
	setcycle 5 target_letter X
	setcycle 5 target_side left
	setcycle 5 validity valid
	setcycle 6 correct_response f
	setcycle 6 cue_direction left
	setcycle 6 target_letter X
	setcycle 6 target_side left
	setcycle 6 validity valid
	setcycle 7 correct_response f
	setcycle 7 cue_direction left
	setcycle 7 target_letter X
	setcycle 7 target_side left
	setcycle 7 validity valid
	setcycle 8 correct_response f
	setcycle 8 cue_direction left
	setcycle 8 target_letter X
	setcycle 8 target_side left
	setcycle 8 validity valid
	setcycle 9 correct_response f
	setcycle 9 cue_direction left
	setcycle 9 target_letter X
	setcycle 9 target_side left
	setcycle 9 validity valid
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	setcycle 16 correct_response j
	setcycle 16 cue_direction left
	setcycle 16 target_letter O
	setcycle 16 target_side left
	setcycle 16 validity valid
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	setcycle 32 correct_response f
	setcycle 32 cue_direction right
	setcycle 32 target_letter X
	setcycle 32 target_side right
	setcycle 32 validity valid
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	setcycle 48 correct_response j
	setcycle 48 cue_direction right
	setcycle 48 target_letter O
	setcycle 48 target_side right
	setcycle 48 validity valid
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	setcycle 64 correct_response f
	setcycle 64 cue_direction left
	setcycle 64 target_letter X
	setcycle 64 target_side right
	setcycle 64 validity invalid
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	setcycle 68 correct_response j
	setcycle 68 cue_direction left
	setcycle 68 target_letter O
	setcycle 68 target_side right
	setcycle 68 validity invalid
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	setcycle 72 correct_response f
	setcycle 72 cue_direction right
	setcycle 72 target_letter X
	setcycle 72 target_side left
	setcycle 72 validity invalid
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	setcycle 76 correct_response j
	setcycle 76 cue_direction right
	setcycle 76 target_letter O
	setcycle 76 target_side left
	setcycle 76 validity invalid
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	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial of the Posner cuing task"
	run fixation True
	run cue True
	run isi True
	run target_display True
	run keyboard_response True
	run feedback True
	run iti True
	run logger True

define sketchpad welcome
	set duration keypress
	set description "Displays a welcome message"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=True text="Welcome to the experiment!" x=0 y=-50 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Press any key to continue" x=0 y=50 z_index=0

