---
API: 3
OpenSesame: 4.1.17
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Visual Working Memory Task"
set synth_backend psycho
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_visible yes
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/sebastiaan/git/osdoc/static/attachments"
set disable_garbage_collection False
set description "This experiment was auto-generated by SigmundAI"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define feedback block_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Block {block_nr} of 3 complete!<br /><br />Your accuracy was {acc}%.<br />Your average response time was {avg_rt} ms.<br /><br />Take a short break if you like.<br />Press any key to continue." x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 block_nr 1
	setcycle 1 block_nr 2
	setcycle 2 block_nr 3
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run trial_loop always
	run block_feedback "count_block_sequence < 2"

define feedback end_of_practice
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=True text="Practice complete!<br /><br />Your accuracy was {acc}%.<br />Your average response time was {avg_rt} ms.<br /><br />The main experiment will now begin. No feedback will be given.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run instructions always
	run practice_instruction always
	run practice_loop always
	run end_of_practice always
	run block_loop always
	run goodbye always

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define inline_script generate_stimuli
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	import math
	COLORS = ["red", "green", "blue", "yellow", "purple", "orange", "cyan", "pink", "white"]
	# select set_size unique colors for the memory array
	colors_list = random.sample(COLORS, set_size)
	# generate roughly evenly spaced angles around the ring with jitter
	base_angles = [i * (360.0 / set_size) for i in range(set_size)]
	angles = [a + random.uniform(-15, 15) for a in base_angles]
	random.shuffle(angles)
	eccentricity = 200
	pos_x = []
	pos_y = []
	for a in angles:
	    rad = math.radians(a)
	    r = eccentricity + random.uniform(-20, 20)
	    pos_x.append(int(round(r * math.cos(rad))))
	    pos_y.append(int(round(r * math.sin(rad))))
	# select which location will be probed
	probe_index = random.randrange(set_size)
	probe_x = pos_x[probe_index]
	probe_y = pos_y[probe_index]
	original_color = colors_list[probe_index]
	# determine probe color based on the change condition
	if change == "same":
	    probe_color = original_color
	else:
	    remaining_colors = [c for c in COLORS if c not in colors_list]
	    probe_color = random.choice(remaining_colors)
	# store as strings for logging purposes
	colors_str = ";".join(colors_list)
	pos_x_str = ";".join([str(v) for v in pos_x])
	pos_y_str = ";".join([str(v) for v in pos_y])
	__end__

define notepad getting_started
	set description "A simple notepad to document your experiment. This plug-in does nothing."
	___notepad__
	Visual Working Memory (Change Detection) Task.
	On each trial participants see a memory array of uniquely colored circles
	arranged around fixation (set size 2, 4 or 6). After a retention interval,
	a single probe circle appears at one of the original locations. The probe
	is either the SAME color as the original circle at that location, or a
	DIFFERENT color. Participants respond with 'a' (same) or 'l' (different).
	Trial timing: fixation 500 ms, memory array 1000 ms, retention 1000 ms,
	probe until response or 3000 ms timeout, ITI 500 ms.
	Practice block: 12 trials with trial-by-trial feedback.
	Main experiment: 3 blocks of 42 trials (7 per condition), no feedback,
	with an accuracy/RT summary screen after each block.
	__end__

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Thank you for participating in this experiment!<br /><br />Your responses have been recorded.<br /><br />Press any key to exit." x=0 y=0 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="On each trial you will briefly see several colored circles arranged around the center of the screen.<br /><br />Try to remember the color of every circle and its location.<br /><br />After a short delay, one location will be probed with a single circle.<br /><br />Decide whether the probe circle has the SAME color as the circle that was originally shown at that location, or a DIFFERENT color.<br /><br />Press 'A' if the color is the SAME.<br />Press 'L' if the color is DIFFERENT.<br /><br />Please respond as quickly and accurately as possible.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad iti
	set duration 500
	set description "Displays stimuli"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script memory_array
	set description "Executes Python code"
	___run__
	memory_canvas.show()
	clock.sleep(1000)
	__end__
	___prepare__
	memory_canvas = Canvas()
	memory_canvas.fixdot(x=0, y=0, color="white")
	for i in range(set_size):
	    memory_canvas.circle(x=pos_x[i], y=pos_y[i], r=30, color=colors_list[i], fill=True)
	__end__

define feedback practice_feedback
	set reset_variables yes
	set duration 750
	set description "Provides feedback to the participant"
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if="correct == 1" text="Correct!" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if="correct == 0 and response != None" text="Wrong!" x=0 y=0 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if="response == None" text="Too slow!" x=0 y=0 z_index=0

define sketchpad practice_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="We will start with a short practice block of 12 trials.<br /><br />During practice you will see feedback after every response.<br /><br />The main experiment will follow without feedback.<br /><br />Press any key to start the practice trials." x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 set_size 2
	setcycle 0 change same
	setcycle 0 practice 1
	setcycle 0 correct_response a
	setcycle 1 set_size 2
	setcycle 1 change same
	setcycle 1 practice 1
	setcycle 1 correct_response a
	setcycle 2 set_size 2
	setcycle 2 change different
	setcycle 2 practice 1
	setcycle 2 correct_response l
	setcycle 3 set_size 2
	setcycle 3 change different
	setcycle 3 practice 1
	setcycle 3 correct_response l
	setcycle 4 set_size 4
	setcycle 4 change same
	setcycle 4 practice 1
	setcycle 4 correct_response a
	setcycle 5 set_size 4
	setcycle 5 change same
	setcycle 5 practice 1
	setcycle 5 correct_response a
	setcycle 6 set_size 4
	setcycle 6 change different
	setcycle 6 practice 1
	setcycle 6 correct_response l
	setcycle 7 set_size 4
	setcycle 7 change different
	setcycle 7 practice 1
	setcycle 7 correct_response l
	setcycle 8 set_size 6
	setcycle 8 change same
	setcycle 8 practice 1
	setcycle 8 correct_response a
	setcycle 9 set_size 6
	setcycle 9 change same
	setcycle 9 practice 1
	setcycle 9 correct_response a
	setcycle 10 set_size 6
	setcycle 10 change different
	setcycle 10 practice 1
	setcycle 10 correct_response l
	setcycle 11 set_size 6
	setcycle 11 change different
	setcycle 11 practice 1
	setcycle 11 correct_response l
	run trial_sequence

define inline_script probe_display
	set description "Executes Python code"
	___run__
	probe_canvas.show()
	__end__
	___prepare__
	probe_canvas = Canvas()
	probe_canvas.circle(x=probe_x, y=probe_y, r=30, color=probe_color, fill=True)
	__end__

define keyboard_response probe_response
	set timeout 3000
	set flush_keyboard yes
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response]"
	set allowed_responses "a;l"

define reset_feedback reset_feedback
	set description "A very simple plug-in to reset feedback variables"

define sketchpad retention
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 42
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 set_size 2
	setcycle 0 change same
	setcycle 0 practice 0
	setcycle 0 correct_response a
	setcycle 1 set_size 2
	setcycle 1 change same
	setcycle 1 practice 0
	setcycle 1 correct_response a
	setcycle 2 set_size 2
	setcycle 2 change same
	setcycle 2 practice 0
	setcycle 2 correct_response a
	setcycle 3 set_size 2
	setcycle 3 change same
	setcycle 3 practice 0
	setcycle 3 correct_response a
	setcycle 4 set_size 2
	setcycle 4 change same
	setcycle 4 practice 0
	setcycle 4 correct_response a
	setcycle 5 set_size 2
	setcycle 5 change same
	setcycle 5 practice 0
	setcycle 5 correct_response a
	setcycle 6 set_size 2
	setcycle 6 change same
	setcycle 6 practice 0
	setcycle 6 correct_response a
	setcycle 7 set_size 2
	setcycle 7 change different
	setcycle 7 practice 0
	setcycle 7 correct_response l
	setcycle 8 set_size 2
	setcycle 8 change different
	setcycle 8 practice 0
	setcycle 8 correct_response l
	setcycle 9 set_size 2
	setcycle 9 change different
	setcycle 9 practice 0
	setcycle 9 correct_response l
	setcycle 10 set_size 2
	setcycle 10 change different
	setcycle 10 practice 0
	setcycle 10 correct_response l
	setcycle 11 set_size 2
	setcycle 11 change different
	setcycle 11 practice 0
	setcycle 11 correct_response l
	setcycle 12 set_size 2
	setcycle 12 change different
	setcycle 12 practice 0
	setcycle 12 correct_response l
	setcycle 13 set_size 2
	setcycle 13 change different
	setcycle 13 practice 0
	setcycle 13 correct_response l
	setcycle 14 set_size 4
	setcycle 14 change same
	setcycle 14 practice 0
	setcycle 14 correct_response a
	setcycle 15 set_size 4
	setcycle 15 change same
	setcycle 15 practice 0
	setcycle 15 correct_response a
	setcycle 16 set_size 4
	setcycle 16 change same
	setcycle 16 practice 0
	setcycle 16 correct_response a
	setcycle 17 set_size 4
	setcycle 17 change same
	setcycle 17 practice 0
	setcycle 17 correct_response a
	setcycle 18 set_size 4
	setcycle 18 change same
	setcycle 18 practice 0
	setcycle 18 correct_response a
	setcycle 19 set_size 4
	setcycle 19 change same
	setcycle 19 practice 0
	setcycle 19 correct_response a
	setcycle 20 set_size 4
	setcycle 20 change same
	setcycle 20 practice 0
	setcycle 20 correct_response a
	setcycle 21 set_size 4
	setcycle 21 change different
	setcycle 21 practice 0
	setcycle 21 correct_response l
	setcycle 22 set_size 4
	setcycle 22 change different
	setcycle 22 practice 0
	setcycle 22 correct_response l
	setcycle 23 set_size 4
	setcycle 23 change different
	setcycle 23 practice 0
	setcycle 23 correct_response l
	setcycle 24 set_size 4
	setcycle 24 change different
	setcycle 24 practice 0
	setcycle 24 correct_response l
	setcycle 25 set_size 4
	setcycle 25 change different
	setcycle 25 practice 0
	setcycle 25 correct_response l
	setcycle 26 set_size 4
	setcycle 26 change different
	setcycle 26 practice 0
	setcycle 26 correct_response l
	setcycle 27 set_size 4
	setcycle 27 change different
	setcycle 27 practice 0
	setcycle 27 correct_response l
	setcycle 28 set_size 6
	setcycle 28 change same
	setcycle 28 practice 0
	setcycle 28 correct_response a
	setcycle 29 set_size 6
	setcycle 29 change same
	setcycle 29 practice 0
	setcycle 29 correct_response a
	setcycle 30 set_size 6
	setcycle 30 change same
	setcycle 30 practice 0
	setcycle 30 correct_response a
	setcycle 31 set_size 6
	setcycle 31 change same
	setcycle 31 practice 0
	setcycle 31 correct_response a
	setcycle 32 set_size 6
	setcycle 32 change same
	setcycle 32 practice 0
	setcycle 32 correct_response a
	setcycle 33 set_size 6
	setcycle 33 change same
	setcycle 33 practice 0
	setcycle 33 correct_response a
	setcycle 34 set_size 6
	setcycle 34 change same
	setcycle 34 practice 0
	setcycle 34 correct_response a
	setcycle 35 set_size 6
	setcycle 35 change different
	setcycle 35 practice 0
	setcycle 35 correct_response l
	setcycle 36 set_size 6
	setcycle 36 change different
	setcycle 36 practice 0
	setcycle 36 correct_response l
	setcycle 37 set_size 6
	setcycle 37 change different
	setcycle 37 practice 0
	setcycle 37 correct_response l
	setcycle 38 set_size 6
	setcycle 38 change different
	setcycle 38 practice 0
	setcycle 38 correct_response l
	setcycle 39 set_size 6
	setcycle 39 change different
	setcycle 39 practice 0
	setcycle 39 correct_response l
	setcycle 40 set_size 6
	setcycle 40 change different
	setcycle 40 practice 0
	setcycle 40 correct_response l
	setcycle 41 set_size 6
	setcycle 41 change different
	setcycle 41 practice 0
	setcycle 41 correct_response l
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run generate_stimuli always
	run fixation always
	run memory_array always
	run retention always
	run probe_display always
	run probe_response always
	run practice_feedback "practice == 1"
	run iti always
	run logger always

define sketchpad welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Welcome to the Visual Working Memory Experiment!<br /><br />In this task you will see arrays of colored circles that you need to remember.<br /><br />Press any key to begin." x=0 y=0 z_index=0

